CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:78
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|Desktop\\SCRINSHOT_updated_tutorial\\analysis_20220503\\input
    Name of the file:s507_s7_tiling.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|None
    Process just a range of rows?:No
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    Group images by metadata?:Yes
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    Rescale intensities?:No

EnhanceOrSuppressFeatures:[module_num:2|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
    Select the input image:gene1
    Name the output image:EnhancedGene1
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:3|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs1
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:4|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
    Select the input object:IdentifiedBlobs1
    Name the output object:ShrunkenBlobs1

MeasureObjectIntensity:[module_num:5|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
    Select images to measure:gene1
    Select objects to measure:IdentifiedBlobs1

EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:gene2
    Name the output image:EnhancedGene2
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:EnhancedGene2
    Name the primary objects to be identified:IdentifiedBlobs2
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:8|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
    Select the input object:IdentifiedBlobs2
    Name the output object:ShrunkenBlobs2

MeasureObjectIntensity:[module_num:9|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
    Select images to measure:gene2
    Select objects to measure:IdentifiedBlobs2

EnhanceOrSuppressFeatures:[module_num:10|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
    Select the input image:gene3
    Name the output image:EnhancedGene3
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:EnhancedGene3
    Name the primary objects to be identified:IdentifiedBlobs3
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:12|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
    Select the input object:IdentifiedBlobs3
    Name the output object:ShrunkenBlobs3

MeasureObjectIntensity:[module_num:13|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
    Select images to measure:gene3
    Select objects to measure:IdentifiedBlobs3

EnhanceOrSuppressFeatures:[module_num:14|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
    Select the input image:gene4
    Name the output image:EnhancedGene4
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:EnhancedGene4
    Name the primary objects to be identified:IdentifiedBlobs4
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:16|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
    Select the input object:IdentifiedBlobs4
    Name the output object:ShrunkenBlobs4

MeasureObjectIntensity:[module_num:17|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
    Select images to measure:gene4
    Select objects to measure:IdentifiedBlobs4

EnhanceOrSuppressFeatures:[module_num:18|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
    Select the input image:gene5
    Name the output image:EnhancedGene5
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:19|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
    Select the input image:EnhancedGene5
    Name the primary objects to be identified:IdentifiedBlobs5
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:20|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
    Select the input object:IdentifiedBlobs5
    Name the output object:ShrunkenBlobs5

MeasureObjectIntensity:[module_num:21|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
    Select images to measure:gene5
    Select objects to measure:IdentifiedBlobs5

EnhanceOrSuppressFeatures:[module_num:22|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
    Select the input image:gene6
    Name the output image:EnhancedGene6
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:23|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
    Select the input image:EnhancedGene6
    Name the primary objects to be identified:IdentifiedBlobs6
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:24|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
    Select the input object:IdentifiedBlobs6
    Name the output object:ShrunkenBlobs6

MeasureObjectIntensity:[module_num:25|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
    Select images to measure:gene6
    Select objects to measure:IdentifiedBlobs6

EnhanceOrSuppressFeatures:[module_num:26|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
    Select the input image:gene7
    Name the output image:EnhancedGene7
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:27|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
    Select the input image:EnhancedGene7
    Name the primary objects to be identified:IdentifiedBlobs7
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:28|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
    Select the input object:IdentifiedBlobs7
    Name the output object:ShrunkenBlobs7

MeasureObjectIntensity:[module_num:29|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
    Select images to measure:gene7
    Select objects to measure:IdentifiedBlobs7

EnhanceOrSuppressFeatures:[module_num:30|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
    Select the input image:gene8
    Name the output image:EnhancedGene8
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:31|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
    Select the input image:EnhancedGene8
    Name the primary objects to be identified:IdentifiedBlobs8
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:32|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
    Select the input object:IdentifiedBlobs8
    Name the output object:ShrunkenBlobs8

MeasureObjectIntensity:[module_num:33|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
    Select images to measure:gene8
    Select objects to measure:IdentifiedBlobs8

EnhanceOrSuppressFeatures:[module_num:34|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
    Select the input image:gene9
    Name the output image:EnhancedGene9
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:35|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
    Select the input image:EnhancedGene9
    Name the primary objects to be identified:IdentifiedBlobs9
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:36|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
    Select the input object:IdentifiedBlobs9
    Name the output object:ShrunkenBlobs9

MeasureObjectIntensity:[module_num:37|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
    Select images to measure:gene9
    Select objects to measure:IdentifiedBlobs9

EnhanceOrSuppressFeatures:[module_num:38|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
    Select the input image:gene10
    Name the output image:EnhancedGene10
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:39|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
    Select the input image:EnhancedGene10
    Name the primary objects to be identified:IdentifiedBlobs10
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:40|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
    Select the input object:IdentifiedBlobs10
    Name the output object:ShrunkenBlobs10

MeasureObjectIntensity:[module_num:41|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
    Select images to measure:gene10
    Select objects to measure:IdentifiedBlobs10

EnhanceOrSuppressFeatures:[module_num:42|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
    Select the input image:gene11
    Name the output image:EnhancedGene11
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:43|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
    Select the input image:EnhancedGene11
    Name the primary objects to be identified:IdentifiedBlobs11
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:44|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
    Select the input object:IdentifiedBlobs11
    Name the output object:ShrunkenBlobs11

MeasureObjectIntensity:[module_num:45|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
    Select images to measure:gene11
    Select objects to measure:IdentifiedBlobs11

EnhanceOrSuppressFeatures:[module_num:46|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
    Select the input image:gene12
    Name the output image:EnhancedGene12
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:47|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
    Select the input image:EnhancedGene12
    Name the primary objects to be identified:IdentifiedBlobs12
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:48|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
    Select the input object:IdentifiedBlobs12
    Name the output object:ShrunkenBlobs12

MeasureObjectIntensity:[module_num:49|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
    Select images to measure:gene12
    Select objects to measure:IdentifiedBlobs12

EnhanceOrSuppressFeatures:[module_num:50|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
    Select the input image:gene13
    Name the output image:EnhancedGene13
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:51|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
    Select the input image:EnhancedGene13
    Name the primary objects to be identified:IdentifiedBlobs13
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:52|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
    Select the input object:IdentifiedBlobs13
    Name the output object:ShrunkenBlobs13

MeasureObjectIntensity:[module_num:53|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
    Select images to measure:gene13
    Select objects to measure:IdentifiedBlobs13

EnhanceOrSuppressFeatures:[module_num:54|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
    Select the input image:gene14
    Name the output image:EnhancedGene14
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:55|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
    Select the input image:EnhancedGene14
    Name the primary objects to be identified:IdentifiedBlobs14
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:56|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
    Select the input object:IdentifiedBlobs14
    Name the output object:ShrunkenBlobs14

MeasureObjectIntensity:[module_num:57|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
    Select images to measure:gene14
    Select objects to measure:IdentifiedBlobs14

EnhanceOrSuppressFeatures:[module_num:58|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
    Select the input image:gene15
    Name the output image:EnhancedGene15
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:59|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
    Select the input image:EnhancedGene15
    Name the primary objects to be identified:IdentifiedBlobs15
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:60|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
    Select the input object:IdentifiedBlobs15
    Name the output object:ShrunkenBlobs15

MeasureObjectIntensity:[module_num:61|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
    Select images to measure:gene15
    Select objects to measure:IdentifiedBlobs15

EnhanceOrSuppressFeatures:[module_num:62|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
    Select the input image:gene16
    Name the output image:EnhancedGene16
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:63|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
    Select the input image:EnhancedGene16
    Name the primary objects to be identified:IdentifiedBlobs16
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:64|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
    Select the input object:IdentifiedBlobs16
    Name the output object:ShrunkenBlobs16

MeasureObjectIntensity:[module_num:65|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
    Select images to measure:gene16
    Select objects to measure:IdentifiedBlobs16

EnhanceOrSuppressFeatures:[module_num:66|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
    Select the input image:gene17
    Name the output image:EnhancedGene17
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:67|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
    Select the input image:EnhancedGene17
    Name the primary objects to be identified:IdentifiedBlobs17
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:68|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
    Select the input object:IdentifiedBlobs17
    Name the output object:ShrunkenBlobs17

MeasureObjectIntensity:[module_num:69|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
    Select images to measure:gene17
    Select objects to measure:IdentifiedBlobs17

EnhanceOrSuppressFeatures:[module_num:70|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
    Select the input image:gene18
    Name the output image:EnhancedGene18
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:71|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
    Select the input image:EnhancedGene18
    Name the primary objects to be identified:IdentifiedBlobs18
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:72|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
    Select the input object:IdentifiedBlobs18
    Name the output object:ShrunkenBlobs18

MeasureObjectIntensity:[module_num:73|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
    Select images to measure:gene18
    Select objects to measure:IdentifiedBlobs18

EnhanceOrSuppressFeatures:[module_num:74|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
    Select the input image:gene19
    Name the output image:EnhancedGene19
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:75|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
    Select the input image:EnhancedGene19
    Name the primary objects to be identified:IdentifiedBlobs19
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:76|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
    Select the input object:IdentifiedBlobs19
    Name the output object:ShrunkenBlobs19

MeasureObjectIntensity:[module_num:77|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
    Select images to measure:gene19
    Select objects to measure:IdentifiedBlobs19

ExportToSpreadsheet:[module_num:78|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IdentifiedBlobs15|Location_Center_Z,IdentifiedBlobs15|Location_Center_X,IdentifiedBlobs15|Location_Center_Y,IdentifiedBlobs15|Location_MaxIntensity_Z_gene15,IdentifiedBlobs15|Location_MaxIntensity_X_gene15,IdentifiedBlobs15|Location_MaxIntensity_Y_gene15,IdentifiedBlobs15|Location_CenterMassIntensity_Z_gene15,IdentifiedBlobs15|Location_CenterMassIntensity_Y_gene15,IdentifiedBlobs15|Location_CenterMassIntensity_X_gene15,IdentifiedBlobs13|Location_CenterMassIntensity_Z_gene13,IdentifiedBlobs13|Location_CenterMassIntensity_X_gene13,IdentifiedBlobs13|Location_CenterMassIntensity_Y_gene13,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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